PsychoPy2experiment version="2020.2.6"
Settings
  Data file delimiter = semicolon
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = BackwardMask
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Routines
  Routine Intro
    CodeComponent code
      Code Type = Py
      Before Experiment:
        block_num = 0
      Begin Experiment:
        # Hide mouse
        win.mouseVisible = False
      End Routine:
        #TriggerExp.saveAsWideText(filenametrigger+'.csv', delim='semicolon')             # set delimiter
        #TriggerExp.abort()
    TextComponent text_intro
      letterHeight = 0.04
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [time (s)] = 5
      wrapWidth = 500
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      text:
        Willkommen!


        Bitte bewerten Sie die folgenden Gesichter
        nach diesen Emotionen:

        traurig       neutral         glücklich
           7                 8                    9
    TextComponent text_probe
      letterHeight = 0.04
      startVal [condition] = $text_intro.status==FINISHED
      wrapWidth = 500
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      text:
        Bewerten Sie danach bitte,

        ob Sie das Gesicht vollständig sehen konnten oder nicht

        mit folgenden Tasten:

        "7" für "Ja" und

        "8" für "Unsicher"

        "9" für "Nein"

        Drücken Sie eine Taste, um mit einer Proberunde zu beginnen, bevor es los geht
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    PolygonComponent polygon_ISI
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      shape = cross
      size = (0.5, 0.5)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $JitterTime
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  Routine start
    TextComponent text_start
      durationEstim = 1
      letterHeight = 0.04
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 120
      text = Jetzt geht es los...
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  Routine trial
    PolygonComponent polygon
      durationEstim = 0.300
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 36
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    ImageComponent primerImage
      image [set every repeat] = $prime
      size = (0.400, 0.484)
      startEstim = 0.31666
      startVal [frame N] = 36
      stopVal [duration (frames)] = $PrimerTime120
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    ImageComponent maskImage
      durationEstim = 0.04166
      image = 10px.jpg
      size = (0.400, 0.484)
      startVal [condition] = $primerImage.status==FINISHED
      stopVal [duration (frames)] = 5
      texture resolution = 512
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    TextComponent response
      durationEstim = 1.5
      letterHeight = 0.04
      startVal [condition] = $maskImage.status==FINISHED
      stopVal [duration (frames)] = 180
      text = traurig     neutral     glücklich
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    KeyboardComponent key_resp
      allowedKeys = '7','8','9'
      correctAns = $corrAnsTar
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [condition] = $maskImage.status==FINISHED
      stopVal [duration (frames)] = 180
      store = first key
      storeCorrect = True
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  Routine pause
    CodeComponent code_Pause
      Code Type = Py
      Begin Routine:
        if block_num == 0:
           continueRoutine=False
      End Routine:
        block_num = block_num +1
    TextComponent text_pause
      durationEstim = 20
      letterHeight = 0.04
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 2400
      text = Kurze Pause, bevor es weiter geht
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  Routine end
    TextComponent text_ende
      durationEstim = 10
      letterHeight = 0.04
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 1200
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      text:
        Das wars!
        Vielen Dank!
  Routine code_block
    CodeComponent countBlocks
      Code Type = Py
      Begin Experiment:
        this_block_number = 0
      Begin Routine:
        this_block_number = this_block_number+1
  Routine introcode
    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        #Set Framerate for Timing
        hz120 = 1 #1

        #Set framerate for jitter                                                       # ms*framerate_factor=frames
        framerate = 60*hz120                                                            # set framerate to get exact jitter time and save it in csv data
        framerate_factor = framerate/1000                                               # 0.12 for 120 Hz

        #Set Timing for Routines in frames
        startTime = 60*hz120                                                           # 3.000 ms/1s       welcome time and time before starting the first block
        instruction = 300*hz120                                                         # 5.000 Ms          show instruction
        cross300 = 18*hz120                                                             # 300 ms            fixcross
        #primeTime1 = 1*hz120                                                           # 16,6 ms           primer strongly masked
        #primeTime2 = 9*hz120                                                           # 150 ms            primer weakly maked #120Hz = 141, also 17 frames
        scrambledTime = 4*hz120                                                         # 66ms ms             mask time #120Hz = 41, also 5 frames
        targettime = 18*hz120                                                           # 300 ms            target time
        responseTime = 90*hz120                                                         # 1.500 ms          time to response
        jittermintime = 60*hz120                                                        # 1.000 ms          minimal jitter time
        jittermaxtime = 120*hz120                                                       # 2.000 ms          maximal jitter time
        maxBreakTime = 1200*hz120                                                       # 20.000 ms/2s      maximal break between blocks
        ende = 600*hz120                                                                # 10.000 ms         Endbildschirm wird angezeigt

        # Conditions
        num_possible_example = 9                                                        # total number of example images in the study
        num_example = 5#5                                                                 # number of example items used
        num_items = 360                                                                 # total number of experiment images in the study
        num_study = 10#20                                                                 # number of study items used in one block#later 120 pro block
        block_ans = 3#3                                                                   # number of blocks, starting with block 1

        text_height = 0.06
        stimulis_size =(0.400, 0.484) #(0.529, 0.625)
  Routine Rating
    TextComponent text
      durationEstim = 3
      letterHeight = 0.04
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = 360
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      text:
        War das Bild für Sie sichtbar?

        Ja        Unsicher         Nein
    KeyboardComponent key_resp_Rating
      allowedKeys = '7','8','9'
      durationEstim = 3
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = 360
      store = all keys
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Flow
  Routine Intro
  LoopInitiator example loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = DataSheet_example_Scanner.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Person', 2), ('primeGender', 'f'), ('prime', '1113_y_f_s_a.jpg'), ('primeEmotion', 'sad'), ('corrAnsPrime', 7), ('targetPerson', 1), ('targetGender', 'm'), ('target', '1111_m_m_h_a.jpg'), ('targetEmotion', 'happy'), ('Cond', 'incongruent'), ('corrAnsTar', 9), ('gender', 'mix'), ('condition', 's+h'), ('ID_primer_example', 130), ('ID_target_example', 150), ('PrimerTime', 1), ('PrimerTime120', 2), ('JitterTime', 154.81559104862913)]),
      OrderedDict([('Person', 2), ('primeGender', 'f'), ('prime', '1111_m_m_h_a.jpg'), ('primeEmotion', 'happy'), ('corrAnsPrime', 9), ('targetPerson', 3), ('targetGender', 'f'), ('target', '1113_y_f_s_a.jpg'), ('targetEmotion', 'sad'), ('Cond', 'incongruent'), ('corrAnsTar', 7), ('gender', 'mix'), ('condition', 'h+s'), ('ID_primer_example', 120), ('ID_target_example', 160), ('PrimerTime', 9), ('PrimerTime120', 18), ('JitterTime', 211.94056977223642)]),
      OrderedDict([('Person', 2), ('primeGender', 'f'), ('prime', '1112_m_f_n_a.jpg'), ('primeEmotion', 'neutral'), ('corrAnsPrime', 8), ('targetPerson', 2), ('targetGender', 'f'), ('target', '1112_m_f_n_a.jpg'), ('targetEmotion', 'neutral'), ('Cond', 'congruent'), ('corrAnsTar', 8), ('gender', 'match'), ('condition', 'n+n'), ('ID_primer_example', 140), ('ID_target_example', 170), ('PrimerTime', 9), ('PrimerTime120', 18), ('JitterTime', 230.84039626590143)]),
      OrderedDict([('Person', 3), ('primeGender', 'f'), ('prime', '1111_m_m_s_a.jpg'), ('primeEmotion', 'sad'), ('corrAnsPrime', 7), ('targetPerson', 1), ('targetGender', 'm'), ('target', '1111_m_m_n_a.jpg'), ('targetEmotion', 'neutral'), ('Cond', 'incongruent'), ('corrAnsTar', 8), ('gender', 'match'), ('condition', 's+n'), ('ID_primer_example', 130), ('ID_target_example', 170), ('PrimerTime', 1), ('PrimerTime120', 2), ('JitterTime', 231.80855760446275)])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
    Routine ISI
    Routine trial
    Routine Rating
  LoopTerminator example
  Routine start
  LoopInitiator readinBlocks loopType="TrialHandler"
    conditionsFile = blocks_Pilot_2.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('conditionsFile', 'block1_Pilot_2')]),
      OrderedDict([('conditionsFile', 'block2_Pilot_2')]),
      OrderedDict([('conditionsFile', 'block3_Pilot_2')])]
    Routine pause
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 0:120
      conditionsFile = $conditionsFile+'.xlsx'
      loopType = sequential
      nReps = 1
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      Routine ISI
      Routine trial
      Routine Rating
    LoopTerminator trials
  LoopTerminator readinBlocks
  Routine end
